PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = Peak_procedure
  Units = use prefs
  Screen = 1
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Routines
  Routine Fixed_Interval
    CodeComponent fixed_code
      Begin Routine:
        if trial_type != "fixed_interval":
            continueRoutine = False
        else:
            pass
      Each Frame:
        if len(fixed_response) > nresponses:
            trial_responsetimes[nresponses] = fixed_response.rt[-1]
            if fixed_response.rt[-1] >= fi_duration:
                score += reward
                continueRoutine = False
            else:
                score -= cost_per_response
            nresponses += 1
    TextComponent fixed_fixation
      text = +
      durationEstim = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent fixed_response
      durationEstim = 3
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine feedback
    CodeComponent code
      Begin Routine:
        if trial_type == "peak_interval":
            continueRoutine = False
        else:
            pass
      End Routine:
        # output
        trial_responsetimes = trial_responsetimes[~np.isnan(trial_responsetimes)]

        for t in trial_responsetimes:
            # put in all the other info we want for a trial, too.
            thisExp.addData("trial_number", trial_number)
            thisExp.addData("trial_type", trial_type)
            thisExp.addData("response_time", t)
            thisExp.addData("score", score)
            thisExp.addData("reward", reward)
            thisExp.addData("cost", cost_per_response)
            thisExp.nextentry()
    TextComponent feedback_score
      text [set every repeat] = $score
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ITI
    StaticComponent ISI
      stopVal [duration (s)] = $iti_duration
    StaticComponent ITI_isi
      stopVal [duration (s)] = 0.5
      durationEstim = 1
      startVal [time (s)] = 0.0
    CodeComponent iti_code
      Begin Experiment:
        trial_number = 0
      Begin Routine:
        trial_type = "fixed_interval" if random()<=0.5 else "peak_interval"
        trial_number += 1

        nresponses = 0
        trial_responsetimes = np.nan + np.empty(1000) # time
  Routine Peak_Interval
    CodeComponent peak_code
      Begin Routine:
        if trial_type != "peak_interval":
            continueRoutine = False
        else:
            pass
      Each Frame:
        if len(fixed_response) > nresponses:
            trial_responsetimes[nresponses] = fixed_response.rt[-1]
            score -= cost_per_response
            nresponses += 1
    TextComponent peak_fixation
      text = +
      stopVal [duration (s)] = $pi_duration
      durationEstim = 9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent peak_response
      stopVal [duration (s)] = $pi_duration
      durationEstim = 9
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine break_time
    CodeComponent break_code
      Begin Routine:
        if trial_type != "break":
            continueRoutine = False
        else:
            pass
      End Routine:
        experiment_timeelapsed = globalClock.getTime() - experiment_starttime
        if experiment_timeelapsed >= experiment_duration:
            trials.finished = True
      Each Frame:
        if globalClock.getTime() - break_starttime >= break_duration:
            break_txt = "Press any key to continue"
    TextComponent break_text
      text [set every frame] = $break_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent break_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Closing
  Routine Instructions
    CodeComponent setup_code
      Begin Experiment:
        import pandas as pd

        session_info = pd.read_csv("Peak_session_information.csv")
        fi_interval = session_info.Fixed_Interval
        pi_interval = session_info.Peak_Interval

        reward = session_info.Reward
        cost_per_response = session_info.Cost

        if interval.shape[0] == 1:
            interval = interval[0]
            reward = reward[0]
            cost_per_response = cost_per_response[0]

        session_duration = 60*60 * session_info.Session_duration[0]
        break_duration = 60 *session_info.Break_duration[0]
        task_duration = 60 * session_info.Task_duration[0]
      End Routine:
        experiment_starttime = globalClock.getTime()
    TextComponent instructions_txt
      text = Here be the task
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructions_key
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100000
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    Routine ITI
    Routine Fixed_Interval
    Routine Peak_Interval
    Routine feedback
    Routine break_time
  LoopTerminator trials
  Routine Closing
