PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[0, 0, 0]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = switch_task
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent trial_code
      Begin Experiment:
        short = 2
        pshort = 0.5
        long = 3
        score = 0

        block_number = 1
        trial_number = 0

        backgroundColor = [0, 0, 0] # mirrors the background, doesn't set it.
        responseColor = [0, 1, 0] # sets the response color
      Begin Routine:
        left_img = {"line": backgroundColor,
                    "fill": backgroundColor}
        right_img = {"line": backgroundColor,
                    "fill": backgroundColor}

        ISI_duration = 0.5 + random()
        trial_duration = short if random()<=pshort else long
        trial_and_ISI_duration = ISI_duration + trial_duration

        nresponses = 0
        trial_number += 1
        trial_starttime = globalClock.getTime()
        last_response = ""
      End Routine:
        if response.keys:
            if trial_duration == short and last_response == "left":
                score += 1
                correct = True
            elif trial_duration == long and last_response == "right":
                score += 1
                correct = True
            else:
                correct = False
        else:
            last_response = ""
            response.keys = [np.nan]
            response.rt = [np.nan]
            correct = False

        # Record all key presses
        for key, rt in zip(response.keys, response.rt):
            thisExp.addData("response", key)
            thisExp.addData("response_time", rt)
            thisExp.addData("ISI", ISI_duration)
            thisExp.addData("interval", trial_duration)
            thisExp.addData("time", trial_starttime)
            thisExp.addData("block_number", block_number)
            thisExp.addData("trial_number", trial_number) # auto-record is 0-based, I want 1-based
            thisExp.addData("score", score)
            thisExp.addData("correct", correct)
            thisExp.nextEntry()
      Each Frame:
        debugtext = [trial_duration, score]

        left_img["line"] = backgroundColor
        right_img["line"] = backgroundColor

        if response.keys:
            last_response = response.keys[-1]
            if last_response == "left":
                left_img["line"] = responseColor
            elif last_response == "right":
                right_img["line"] = responseColor

        # they have to make a long response so we get
        # the entire distribution
        if t >= trial_and_ISI_duration:
            continueRoutine = False
    TextComponent trial_fixation
      text = +
      durationEstim = 3
      startEstim = 1
      startVal [time (s)] = ISI_duration
      letterHeight = 0.1
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    KeyboardComponent response
      forceEndRoutine = False
      startEstim = 1
      allowedKeys = 'left', 'right'
      startVal [time (s)] = ISI_duration
      store = all keys
      syncScreenRefresh = False
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    PolygonComponent trial_leftShape
      fillColor [set every repeat] = $left_img["fill"]
      durationEstim = 3
      pos = [-0.5, 0]
      lineWidth = 3
      startEstim = 1
      lineColor [set every frame] = $left_img["line"]
      startVal [time (s)] = ISI_duration
      size = [0.5, 0.5]
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    PolygonComponent trial_rightShape
      fillColor [set every repeat] = $right_img["fill"]
      durationEstim = 3
      pos = [0.5, 0]
      lineWidth = 3
      startEstim = 1
      lineColor [set every frame] = $right_img["line"]
      startVal [time (s)] = ISI_duration
      size = [0.5, 0.5]
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    TextComponent trial_debugtxt
      text [set every frame] = $debugtext
      durationEstim = 3
      pos = [0, .75]
      startEstim = 1
      startVal [time (s)] = ISI_duration
      letterHeight = 0.1
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    StaticComponent ISI_
      stopVal [duration (s)] = ISI_duration
      durationEstim = 1
      startVal [time (s)] = 0
  Routine feedback
    CodeComponent feedback_code
      Begin Routine:
        left_img = {"line": backgroundColor,
                    "fill": backgroundColor}
        right_img = {"line": backgroundColor,
                    "fill": backgroundColor}

        left_img["line"] = responseColor if last_response ==" left" else backgroundColor
        right_img["line"] = responseColor if last_response == "right" else backgroundColor

        if trial_duration == short:
            left_img["fill"] = "green" if correct else "red"
        elif trial_duration == long:
            right_img["fill"] = "green" if correct else "red"
    PolygonComponent feedback_leftShape
      fillColor [set every repeat] = $left_img["fill"]
      stopVal [duration (s)] = 1
      pos = [-0.5, 0]
      lineWidth = 3
      lineColor [set every repeat] = $left_img["line"]
      startVal [time (s)] = 0
      size = [0.5, 0.5]
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    PolygonComponent feedback_rightShape
      fillColor [set every repeat] = $right_img["fill"]
      stopVal [duration (s)] = 1
      pos = [0.5, 0]
      lineWidth = 3
      lineColor [set every repeat] = $right_img["line"]
      startVal [time (s)] = 0
      size = [0.5, 0.5]
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  Routine break_2
    TextComponent break_txt
      text [set every frame] = break, yo
      letterHeight = 0.1
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    KeyboardComponent break_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 60
      syncScreenRefresh = False
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Flow
  LoopInitiator task_segments loopType="TrialHandler"
    loopType = random
    nReps = 6
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine break_2
  LoopTerminator task_segments
